CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DAPI
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:DAPI
    Name the output image:GaussianFilter
    Sigma:1

ColorToGray:[module_num:6|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
    Select the input image:GaussianFilter
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
RescaleIntensity:[module_num:7|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
    Select the input image:OrigGray
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum of all images
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    Intensity range for the output image:0.0,2.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:DAPI_WT
    Typical diameter of objects, in pixel units (Min,Max):85,195
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.15
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:DAPI_WT
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:RescaleIntensity
    Select objects to measure:DAPI_WT

ClassifyObjects:[module_num:11|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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:4
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:normal
    Name the output objects:normal
    Select a class:donutlike
    Name the output objects:donut
    Select a class:hooflike
    Name the output objects:hooflike
    Select a class:littlehooflike
    Name the output objects:littlehooflike
    Select the object name:DAPI_WT
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Elsewhere...|D:\\cell\\cellprofiler\\donut\\20240920
    Rules or classifier file name:my_model_0929_LDA.model
    Allow fuzzy feature matching?:No

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:DAPI_WT, donut, hooflike, littlehooflike, normal
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

SaveCroppedObjects:[module_num:13|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
    Do you want to save cropped images or object masks?:Images
    Objects:donut
    Directory:Elsewhere...|D:\\cell\\cellprofiler\\donut\\20240920\\0929_lda
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:DAPI
    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:DAPI

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\cell\\cellprofiler\\donut\\20240920\\0929_lda
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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