CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DAPI
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:DAPI
    Name the output image:GaussianFilter
    Sigma:1

ColorToGray:[module_num:6|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
    Select the input image:GaussianFilter
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1
    Relative weight of the green channel:1
    Relative weight of the blue channel:1
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
RescaleIntensity:[module_num:7|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
    Select the input image:OrigGray
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum of all images
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    Intensity range for the output image:0.0,2.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:DAPI_WT
    Typical diameter of objects, in pixel units (Min,Max):85,195
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.15
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:DAPI_WT
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:RescaleIntensity
    Select objects to measure:DAPI_WT

ExportToDatabase:[module_num:11|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
    Database type:MySQL
    Database name:0926test
    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Elsewhere...|D:\\cell\\cellprofiler\\donut\\20240920
    Create a CellProfiler Analyst properties file?:Yes
    Database host:127.0.0.1:3306
    Username:root
    Password:123456
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    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:DAPI_WT
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:donut
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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