CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:KO
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:KO
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RescaleIntensity:[module_num:6|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
    Select the input image:OrigGray
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum of all images
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    Intensity range for the output image:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):60,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\cell\\cellprofiler\\donut\\20240920\\ko-results\\2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:KO_
    Overwrite existing files without warning?:No
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